<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>12</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
      
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cancer"/>
      <CellType TypeId="2" TypeName="CancerApoptosis"/>
      <CellType TypeId="3" TypeName="CancerNecrosis"/>
      <CellType TypeId="4" TypeName="actTcell"/>
      <CellType TypeId="5" TypeName="Treg"/>
      <CellType TypeId="6" TypeName="NoCoffeeTcell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Cancer">12.0</Energy>
      <Energy Type1="Medium" Type2="CancerApoptosis">12.0</Energy>
      <Energy Type1="Medium" Type2="CancerNecrosis">12.0</Energy>
      <Energy Type1="Medium" Type2="actTcell">10.0</Energy>
      <Energy Type1="Medium" Type2="Treg">10.0</Energy>
      <Energy Type1="Medium" Type2="NoCoffeeTcell">10.0</Energy>
      <Energy Type1="Cancer" Type2="Cancer">10.0</Energy>
      <Energy Type1="Cancer" Type2="CancerApoptosis">10.0</Energy>
      <Energy Type1="Cancer" Type2="CancerNecrosis">10.0</Energy>
      <Energy Type1="CancerApoptosis" Type2="CancerApoptosis">10.0</Energy>
      <Energy Type1="CancerApoptosis" Type2="CancerNecrosis">10.0</Energy>
      <Energy Type1="CancerNecrosis" Type2="CancerNecrosis">10.0</Energy>
      <Energy Type1="actTcell" Type2="actTcell">20.0</Energy>
      <Energy Type1="actTcell" Type2="Cancer">12.0</Energy>
      <Energy Type1="actTcell" Type2="CancerApoptosis">12.0</Energy>
      <Energy Type1="actTcell" Type2="CancerNecrosis">12.0</Energy>
      <Energy Type1="Treg" Type2="Treg">20.0</Energy>
      <Energy Type1="Treg" Type2="Cancer">10.0</Energy>
      <Energy Type1="Treg" Type2="CancerApoptosis">10.0</Energy>
      <Energy Type1="Treg" Type2="CancerNecrosis">10.0</Energy>
      <Energy Type1="Treg" Type2="actTcell">20.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="NoCoffeeTcell">10.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="Cancer">10.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="CancerApoptosis">10.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="CancerNecrosis">10.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="actTcell">10.0</Energy>
      <Energy Type1="NoCoffeeTcell" Type2="Treg">10.0</Energy>
      
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Secretion">
      
      <!-- Specification of secretion properties of select cell types. -->
      <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
      <!-- Specification of secretion properties of individual cells can be done in Python -->
      <Field Name="DAMP">
         <Secretion Type="CancerNecrosis">1.0</Secretion>
      </Field>
      <Field Name="Oxygen">
         <ConstantConcentration Type="Medium">100.0</ConstantConcentration>
      </Field>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
   
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="TGFB">
         <DiffusionData>
            <FieldName>TGFB</FieldName>
            <GlobalDiffusionConstant>10</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.001</GlobalDecayConstant>
            
            <!-- <InitialConcentrationExpression>100</InitialConcentrationExpression> -->
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cancer">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerApoptosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerNecrosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="actTcell">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Treg">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NoCoffeeTcell">3</DiffusionCoefficient>
            <DecayCoefficient CellType="Cancer">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerApoptosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerNecrosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="actTcell">0.0</DecayCoefficient>
            <DecayCoefficient CellType="Treg">0.0</DecayCoefficient>
            <DecayCoefficient CellType="NoCoffeeTcell">0.0</DecayCoefficient>
            
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Cancer">0.1</Secretion> -->
            <!-- <Secretion Type="CancerApoptosis">0.1</Secretion> -->
            <!-- <Secretion Type="CancerNecrosis">15</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Cancer,CancerApoptosis,CancerNecrosis" Type="CancerNecrosis">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CancerNecrosis">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="IL2">
         <DiffusionData>
            <FieldName>IL2</FieldName>
            <GlobalDiffusionConstant>10</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.001</GlobalDecayConstant>
            
            <!-- <InitialConcentrationExpression>100</InitialConcentrationExpression> -->
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cancer">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerApoptosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerNecrosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="actTcell">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Treg">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NoCoffeeTcell">3</DiffusionCoefficient>
            <DecayCoefficient CellType="Cancer">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerApoptosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerNecrosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="actTcell">0.0</DecayCoefficient>
            <DecayCoefficient CellType="Treg">0.0</DecayCoefficient>
            <DecayCoefficient CellType="NoCoffeeTcell">0.0</DecayCoefficient>
            
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Cancer">0.1</Secretion> -->
            <!-- <Secretion Type="CancerApoptosis">0.1</Secretion> -->
            <!-- <Secretion Type="CancerNecrosis">15</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Cancer,CancerApoptosis,CancerNecrosis" Type="CancerNecrosis">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CancerNecrosis">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="DAMP">
         <DiffusionData>
            <FieldName>DAMP</FieldName>
            <GlobalDiffusionConstant>10</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0001</GlobalDecayConstant>
            
            <!-- <InitialConcentrationExpression>100</InitialConcentrationExpression> -->
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cancer">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerApoptosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerNecrosis">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="actTcell">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Treg">3</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NoCoffeeTcell">3</DiffusionCoefficient>
            <DecayCoefficient CellType="Cancer">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerApoptosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="CancerNecrosis">0.0</DecayCoefficient>
            <DecayCoefficient CellType="actTcell">0.0</DecayCoefficient>
            <DecayCoefficient CellType="Treg">0.0</DecayCoefficient>
            <DecayCoefficient CellType="NoCoffeeTcell">0.0</DecayCoefficient>
            
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Cancer">0.1</Secretion> -->
            <!-- <Secretion Type="CancerApoptosis">0.1</Secretion> -->
            <Secretion Type="CancerNecrosis">15</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="Cancer,CancerApoptosis,CancerNecrosis" Type="CancerNecrosis">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CancerNecrosis">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Oxygen">
         <DiffusionData>
            <FieldName>Oxygen</FieldName>
            <GlobalDiffusionConstant>10</GlobalDiffusionConstant>
            <GlobalDecayConstant>0</GlobalDecayConstant>
            
            <InitialConcentrationExpression>100</InitialConcentrationExpression>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cancer">1.8</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerApoptosis">1.8</DiffusionCoefficient>
            <DiffusionCoefficient CellType="CancerNecrosis">1.8</DiffusionCoefficient>
            <DiffusionCoefficient CellType="actTcell">1.8</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Treg">1.2</DiffusionCoefficient>
            <DiffusionCoefficient CellType="NoCoffeeTcell">1.8</DiffusionCoefficient>
            <DecayCoefficient CellType="Cancer">0.05</DecayCoefficient>
            <DecayCoefficient CellType="CancerApoptosis">0.05</DecayCoefficient>
            <DecayCoefficient CellType="CancerNecrosis">0.05</DecayCoefficient>
            <DecayCoefficient CellType="actTcell">0.05</DecayCoefficient>
            <DecayCoefficient CellType="Treg">0.08</DecayCoefficient>
            <DecayCoefficient CellType="NoCoffeeTcell">0.05</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Cancer">0.1</Secretion> -->
            <!-- <Secretion Type="CancerApoptosis">0.1</Secretion> -->
            <!-- <Secretion Type="CancerNecrosis">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Cancer,CancerApoptosis,CancerNecrosis" Type="CancerNecrosis">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="CancerNecrosis">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Plugin Name="Chemotaxis">
        <ChemicalField Name="DAMP">
            <ChemotaxisByType Lambda="700.0" Type="actTcell" LogScaledCoef="0.2"/>
        </ChemicalField>
        <ChemicalField Name="DAMP">
            <ChemotaxisByType Lambda="500.0" Type="Treg" LogScaledCoef="0.2"/>
        </ChemicalField>
        <ChemicalField Name="IL2">
            <ChemotaxisByType Lambda="500.0" Type="actTcell" LogScaledCoef="0.2"/>
        </ChemicalField>
        <ChemicalField Name="IL2">
            <ChemotaxisByType Lambda="700.0" Type="Treg" LogScaledCoef="0.2"/>
        </ChemicalField>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="85" y="85" z="0"/>
         <BoxMax x="115" y="115" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Cancer</Types>
      </Region>
   </Steppable>
   
   <!-- <Steppable Type="PIFInitializer"> -->
        <!-- <PIFName>stable_tumor.piff</PIFName> -->
   <!-- </Steppable> -->

</CompuCell3D>
